OpenViBE-Scenario

control GUI => #0
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_control_GUI.py
  Sampling frequency = 512
  Generated epoch sample count = 32
  min value = -15
  max value = 15
  window title =
Signal=#0 -> Signal display "control GUI"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100

TCP writer stim
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-writer-stim.py
  IP = 127.0.0.1
  Port = 5006

TCP reader analog => #3
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog.py
  IP = 127.0.0.1
  Port = 10001
Signal=#3 -> 0xc67a01dc Signal display "TCP reader"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
