OpenViBE-Scenario
Comment
  Use with openvibe 0.18

  Record data from ser2sock.

TCP reader analog => #0
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog-client.py
  IP = 127.0.0.1
  Port = 10000
  Debug = false
  Interpolation method = 0
0xc67a01dc Processing stims => #1
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-stimulus-server.py
  IP = 127.0.0.1
  Port = 11001
  Debug = false
Heart beats => #2
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-stimulus-client.py
  IP = 127.0.0.1
  Port = 11000
  Debug = false
Input stimulations 1=#1, Input stimulations 2=#2 -> Stimulation multiplexer => #3
Input stream 1=#0, Input stream 2=#3 -> Identity => #4
#4.Output stream 2 -> Stimulation listener
  Log level to use = Information
Signal=#4.Output stream 1, Stimulations=#4.Output stream 2 -> Signal display "TCP reader"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#4.Output stream 1, Stimulation=#4.Output stream 2 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/../recordings/record-[$core{date}-$core{time}].gdf
